PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[-1,-1,-1]
  expName = Verb GenerationSeq
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Routines
  Routine trial
    TextComponent verb
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $word
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    KeyboardComponent scannertrigger
      allowedKeys [set every repeat] = 'T','t'
      discard previous = False
      durationEstim = 10
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      syncScreenRefresh = False
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  Routine rest
    PolygonComponent cross
      fillColor = white
      lineWidth = .5
      shape = cross
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    KeyboardComponent scannertrigger2
      allowedKeys [set every repeat] = 'T','t'
      discard previous = False
      durationEstim = 10
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      syncScreenRefresh = False
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  Routine instructions
    TextboxComponent textbox
      bold = False
      editable = False
      letterHeight = 0.07
      lineSpacing = .8
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
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      text:
        If a word is shown,
        think of any verbs that you associate
        with the shown noun
        (e.g. water -> drinking, swimming, splashing...)

        If a cross is shown, just look at it
    KeyboardComponent scannertriggerfirst
      allowedKeys [set every repeat] = 'T','t'
      discard previous = False
      durationEstim = 300
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
      syncScreenRefresh = False
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Flow
  Routine instructions
  LoopInitiator BlockLoop loopType="TrialHandler"
    conditionsFile = RowIndex.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'rows': '0:9'},
      {'rows': '10:19'},
      {'rows': '20:29'}]
    LoopInitiator simple_loop loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = 10
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      Routine rest
    LoopTerminator simple_loop
    LoopInitiator verbs loopType="TrialHandler"
      Selected rows = $rows
      conditionsFile = VerbsSeq.xlsx
      isTrials = False
      loopType = sequential
      nReps = 1
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      conditions:
        [{'word': 'cake'},
        {'word': 'rabbit'},
        {'word': 'child'},
        {'word': 'artist'},
        {'word': 'pig'},
        {'word': 'bird'},
        {'word': 'wolf '},
        {'word': 'fire'},
        {'word': 'fish'},
        {'word': 'knife'},
        {'word': 'cake2'},
        {'word': 'rabbit'},
        {'word': 'child'},
        {'word': 'artist'},
        {'word': 'pig'},
        {'word': 'bird'},
        {'word': 'wolf '},
        {'word': 'fire'},
        {'word': 'fish'},
        {'word': 'knife'},
        {'word': 'cake3'},
        {'word': 'rabbit'},
        {'word': 'child'},
        {'word': 'artist'},
        {'word': 'pig'},
        {'word': 'bird'},
        {'word': 'wolf '},
        {'word': 'fire'},
        {'word': 'fish'},
        {'word': 'knife'}]
      Routine trial
    LoopTerminator verbs
  LoopTerminator BlockLoop
